# Generated by Configurator on Thu Jan 28 15:25:30 GMT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,Blackfly S BFS-U3-51S5M,SpinnakerCamera,Blackfly S BFS-U3-51S5M

# Pre-init settings for devices
Property,Blackfly S BFS-U3-51S5M,Serial Number,18476004

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Blackfly S BFS-U3-51S5M
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

